PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [2048, 1280]
  color = -1.0000, -1.0000, -1.0000
  expName = speech_exp
  frameRateMsg = +
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine initialization
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    CodeComponent init_device
      Code Type = Py
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      Before Experiment:
        import json
        import warnings
        import time

        from src.transmission.trans_control.dataController import DataController
        from src.peripheral.camera.MultiCamThreadRecord import (
            init_camera_thread,
            start_camera_thread,
            exit_camera_thread
        )
        from src.peripheral.audio.AudioThreadRecord import (
            init_audio_thread,
            start_audio_thread,
            exit_audio_thread
        )

        from src.utils.exit_handler import patch_core_quit, register_cleanup_function

        config_path = os.path.join('./config', 'sentence_reading_config.json')

        try:
            with open(config_path, 'r', encoding='utf-8') as f:
                config = json.load(f)
            logging.info(f"✓ Config loaded from {config_path}")
        except Exception as e:
            logging.error(f"✗ Failed to load config: {e}")
            config = {}
            warnings.warn("Using default configuration values")

        host = config.get("experiment", {}).get("host", "127.0.0.1")
        port = config.get("experiment", {}).get("port", 5001)

        big_text_size = config.get("experiment", {}).get("big_text_size", 0.25)
        small_text_size = config.get("experiment", {}).get("small_text_size", 0.25)

        trial_repeats = config.get("experiment", {}).get("trial_repetas", 1)
        block_repeats = config.get("experiment", {}).get("block_repeats", 1)

        task_type = config.get("experiment", {}).get("task_type", 1)
        task_desc = config.get("experiment", {}).get("task_desc", {"1": "语句跟读"})

        if task_type == 1:
            selected_rows = config.get("experiment", {}).get("selected_rows","0:10")
            task_num = 10
        else:
            print("WARNING: 任务类型只能为1.")

        conditions_file = config.get("experiment", {}).get(
            "conditions",
            r".\resources\conditions\sentence_reading\expanded_sentences.csv"
        )

        sound_dir = config.get("experiment", {}).get(
            "sound_dir",
            r".\resources\audios\sentence_reading"
        )

        random_seed = config.get("experiment", {}).get("random_seed", 42)

        camera_connected_status = config.get("peripheral_stats", {}).get(
            "is_camera_connected", False
        )
        audio_connected_status = config.get("peripheral_stats", {}).get(
            "is_audio_connected", False
        )

        dc = None
        try:
            dc = DataController(host, port, 4, 2000)
            dc.connect()
            dc.start()
            dc.setBufferSize(10)
            logging.info("✓ DataController initialized and started")
        except Exception as e:
            logging.error(f"✗ DataController initialization failed: {e}")
            warnings.warn(f"Could not initialize DataController: {e}")
            print(f"ERROR: {e}")

        camera_threads = None
        if camera_connected_status:
            try:
                camera_threads = init_camera_thread()
                start_camera_thread(camera_threads, mode="production")
                logging.info("✓ Camera recording started")
            except Exception as e:
                logging.error(f"✗ Camera initialization failed: {e}")
                warnings.warn(f"Could not start camera recording: {e}")

        audio_thread = None
        if audio_connected_status:
            try:
                audio_thread = init_audio_thread()
                start_audio_thread(audio_thread, mode="production")
                logging.info("✓ Audio recording started")
            except Exception as e:
                logging.error(f"✗ Audio initialization failed: {e}")
                warnings.warn(f"Could not start audio recording: {e}")

        def cleanup_all_resources():
            logging.info("=" * 50)
            logging.info("Cleaning up resources...")

            if dc:
                try:
                    dc.close_conn()
                    logging.info("✓ DataController closed")
                except Exception as e:
                    logging.error(f"✗ Error closing DataController: {e}")

            if audio_thread:
                try:
                    exit_audio_thread(audio_thread)
                    logging.info("✓ Audio recording stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping audio: {e}")

            if camera_threads:
                try:
                    exit_camera_thread(camera_threads)
                    logging.info("✓ Camera recording stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping cameras: {e}")

            logging.info("=" * 50)
            logging.info("All resources cleaned up")

        register_cleanup_function(cleanup_all_resources)
        patch_core_quit()
      Begin Routine:
        #start_camera_thread(cam_threads, mode='production')
        #start_audio_thread(audio_thread, mode='production')

        # 将相机启动的时间保存
        camera_t_s = core.monotonicClock.getTime() # s

        # 开始采集与获取信号
        # rm.begin_collect()
        # 开始routine时，在第8通道打标，并在routine结束时关闭打标
        event_id = 8
        rm.set_marker(event_id, mode=marker_mode)
        # 将当前时间记录下来
        marker_t_s = core.monotonicClock.getTime() # s
      End Experiment:
        cleanup_all_resources()
      End Routine:
        # 关闭打标
        rm.set_marker(0, mode=marker_mode)
        thisExp.addData('marker_t_s', marker_t_s)
        thisExp.addData('camera_t_s', camera_t_s)

        # 将参数都记录下来
        thisExp.addData('trial_repeats',trial_repeats)
        thisExp.addData('block_repeats',block_repeats)
    TextComponent init_text
      letterHeight = small_text_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine introduction
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    SerialOutComponent intro_serialPort
      baudrate = 115200
      bytesize = 8
      getResponse = False
      parity = N
      port = $com_port
      startVal [time (s)] = 0.0
      startdata = 8
      stopVal [duration (s)] = 1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = True
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    TextComponent intro_text
      letterHeight = small_text_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine block_start
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    CodeComponent block_start_code
      Code Type = Py
      Begin Routine:
        #打标 在第四个通道打标
        rm.set_marker(4, mode=marker_mode)
        # 将当前时间记录下来
        marker_t_s = core.monotonicClock.getTime() # s
      End Routine:
        # 保存block_start的时间
        thisExp.addData('marker_t_s', marker_t_s)
        # 拉低
        rm.set_marker(0, mode=marker_mode)
    TextComponent start_3
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        即将开始
        3
    TextComponent start_2
      letterHeight = 0.25
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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      text:
        即将开始
        2
    TextComponent start_1
      letterHeight = 0.25
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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      text:
        即将开始
        1
  Routine speech_corpus
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    CodeComponent sentence_code
      Code Type = Py
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      Begin Routine:
        #打标 在第1个通道打标 意味着开始播放一个回合的音频了
        # 整个读语料的过程，第1个通道始终为高
        rm.set_marker(1, mode=marker_mode)

        font_size = 0.20  # 保持原来的字体大小
        max_line_width = 1.7  # 最大行宽，超过这个宽度会换行
        line_spacing = 0.25  # 行间距
        vertical_offset = -0.1  # 添加垂直偏移量，负值表示向下移动

        # 获取当前行数据 - 使用PsychoPy提供的变量
        words = []


        # 自动获取所有列名，但排除id列和PsychoPy内部使用的列
        excluded_cols = ['id', 'thisN', 'thisBlock_loopN', 'thisSentence_loopN', 'thisRepN']
        columns = [col for col in thisSentence_loop.keys() if col not in excluded_cols]

        # 提取所有单词，直到遇到"end"，并处理逗号
        for col in columns:
            if col in thisSentence_loop and thisSentence_loop[col]:
                if thisSentence_loop[col] == 'end':
                    break  # 遇到"end"立即退出循环
                elif thisSentence_loop[col] == 'comma' and words:  # 如果是逗号且前面有词
                    # 将逗号附加到前一个词后面
                    words[-1] = words[-1] + ','
                elif thisSentence_loop[col] != 'comma':  # 如果不是逗号，正常添加
                    words.append(thisSentence_loop[col])


        # 计算每个词的位置
        word_positions = []
        word_spacing = 0.02  # 词之间的间距

        # 计算每个词的宽度
        word_widths = []
        for word in words:
            # 确保word是字符串类型
            word = str(word)
            # 每个中文字符的宽度大约是字体大小
            # 如果有逗号，额外增加一点宽度
            word_width = len(word.replace(',', '')) * font_size
            if ',' in word:
                word_width += font_size * 0.3  # 逗号宽度稍小
            word_widths.append(word_width)

        # 自动换行处理
        lines = []  # 存储每行的词索引
        current_line = []
        current_line_width = 0

        for i, width in enumerate(word_widths):
            # 如果当前行为空或者添加这个词不会超过最大宽度
            if not current_line or current_line_width + width + word_spacing <= max_line_width:
                current_line.append(i)
                current_line_width += width + (word_spacing if current_line else 0)
            else:
                # 当前行已满，添加到lines并开始新行
                lines.append(current_line)
                current_line = [i]
                current_line_width = width

        # 添加最后一行
        if current_line:
            lines.append(current_line)

        # 计算每行的词位置
        word_positions = [None] * len(words)  # 预分配位置列表

        for line_idx, line in enumerate(lines):
            # 计算当前行的总宽度
            line_width = sum(word_widths[i] for i in line) + word_spacing * (len(line) - 1)

            # 计算起始x坐标，使文本居中
            start_x = -line_width / 2

            # 计算y坐标，使多行文本垂直居中，并添加垂直偏移
            total_height = len(lines) * line_spacing
            y = total_height / 2 - line_idx * line_spacing + vertical_offset

            # 计算每个词的位置
            current_x = start_x
            for i in line:
                word_center_x = current_x + word_widths[i] / 2
                word_positions[i] = (word_center_x, y)
                current_x += word_widths[i] + word_spacing

        # 创建持久的文本刺激对象，避免每帧重新创建
        word_stims = []
        for i, word in enumerate(words):
            x, y = word_positions[i]
            word_stim = visual.TextStim(
                win=win,
                text=word,
                font='SimHei',
                pos=(x, y),
                height=font_size,
                color='#333333',  # 默认颜色为深灰色
                wrapWidth=None,    # 不自动换行
                alignText='center',
                anchorHoriz='center',
                anchorVert='center'
            )
            word_stims.append(word_stim)

        # 初始化高亮变量
        highlight_started = False
        current_word_index = 0  # 改为-1，表示还没开始高亮任何词
        #highlight_duration = highlight_duration  # 每个词高亮显示2秒
        initial_delay = 0  # 开始前的延迟时间（全灰状态）
        final_delay = 0  # 结束后的延迟时间（全灰状态）
        routine_start_time = None  # 记录routine开始时间
        end_phase_started = False  # 新增：标记是否已进入结束阶段



        ########### 声音部分 ###########
        # 添加到现有代码末尾
        word_sounds = []  # 存储音频对象
        for word in words:
          try:
              sound_file = f'contents/audios/{word.replace(",", "")}.wav'
              word_sounds.append(sound_file)
          except:
              word_sounds.append(None)  # 如果音频文件不存在
      Each Frame:
        # 记录routine开始时间
        if routine_start_time is None:
            routine_start_time = t

        # 计算相对于routine开始的时间
        relative_time = t - routine_start_time

        # 控制高亮显示
        if not end_phase_started:  # 只有在未进入结束阶段时才执行高亮逻辑
            if relative_time < initial_delay:
                # 开始的1秒全灰状态
                current_word_index = 0
            elif not highlight_started and relative_time >= initial_delay:
                # 开始第一个词的高亮
                highlight_started = True
                current_word_index = 0
                highlight_start_time = t
            elif highlight_started and current_word_index < len(words):
                if t >= highlight_start_time + highlight_duration:
                    current_word_index += 1
                    highlight_start_time = t

                    # 添加音频播放逻辑
                    if current_word_index < len(words) and word_sounds[current_word_index]:
                        try:
                            word_sound.setSound(word_sounds[current_word_index])
                            word_sound.play()
                        except:
                            pass  # 如果音频播放失败，继续执行

        # 判断是否进入结束阶段
        if current_word_index >= len(words) and not end_phase_started:
            # 进入结束阶段
            end_phase_started = True  # 标记已进入结束阶段
            end_phase_start_time = t  # 记录结束阶段开始时间
            current_word_index = -1  # 设为-1表示全灰状态
        elif end_phase_started:
            # 已在结束阶段，检查是否需要结束routine
            if t >= end_phase_start_time + final_delay:
                continueRoutine = False

        # 更新每个词的颜色并绘制
        for i, word_stim in enumerate(word_stims):
            word_stim.color = 'white' if i == current_word_index else '#333333'
            word_stim.draw()
      End Routine:
        # 每一个句子结束，拉低
        rm.set_marker(0, mode=marker_mode)
    TextComponent corpus_text
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    SoundComponent word_sound
      sound [set every repeat] = $'contents/audios/' + str(words[current_word_index]).replace(',', '') + '.wav'
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $highlight_duration * len(words)
      syncScreenRefresh = False
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  Routine black_gap
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    CodeComponent tqdm
      Code Type = Py
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      Begin Experiment:
        from tqdm import tqdm
        global trial_bar
        print("block_repeats", block_repeats)
        print("trial_repeats", trial_repeats)

        total_trials = block_repeats * trial_repeats * total_rows


        # 初始化进度条，描述文本将在后面动态更新
        trial_bar = tqdm(total=total_trials, desc="实验准备中...")


        print("begin exp")
      Begin Routine:
        # 1. 首先，为即将开始的这个 trial 更新进度条
        #    让进度条的数值（如 11/25 -> 12/25）先行一步
        trial_bar.update(1)

        # 2. 然后，检查这是否是一个新 block 的开始
        #    PsychoPy 会自动创建名为 block_loop 和 trials 的循环处理器
        if sentence_loop.thisN == 0:
            # 获取当前 block 的编号 (thisN 从0开始，所以+1)
            current_block = block_loop.thisN + 1
            # 获取总 block 数
            total_blocks = block_loop.nTotal

            # 构建新的描述文本
            desc_text = f"block进度：{current_block}/{total_blocks}，总进度"

            # 更新描述。这会再次刷新屏幕，但此时进度条的数值已经是正确的了
            trial_bar.set_description(desc_text)
      End Experiment:
        trial_bar.close()
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine block_end
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    TextComponent rest_5
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        回合结束
        休息 5s
  Routine over
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    TextComponent end_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        全部结束
        谢谢
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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Flow
  Routine initialization
  LoopInitiator block_loop loopType="TrialHandler"
    loopType = sequential
    nReps = block_repeats
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    conditions:
      [OrderedDict([('id', 1), ('first', '大家'), ('second', '好'), ('third', 'comma'), ('fourth', '我'), ('fifth', '很'), ('sixth', '开心'), ('seventh', 'end'), ('eighth', None), ('ninth', None), ('tenth', None)]),
      OrderedDict([('id', 2), ('first', '你好'), ('second', 'comma'), ('third', '很'), ('fourth', '开心'), ('fifth', '认识'), ('sixth', '你们'), ('seventh', 'end'), ('eighth', None), ('ninth', None), ('tenth', None)]),
      OrderedDict([('id', 3), ('first', '大家'), ('second', '好'), ('third', 'end'), ('fourth', None), ('fifth', None), ('sixth', None), ('seventh', None), ('eighth', None), ('ninth', None), ('tenth', None)]),
      OrderedDict([('id', 4), ('first', '我'), ('second', '很'), ('third', '开心'), ('fourth', 'end'), ('fifth', None), ('sixth', None), ('seventh', None), ('eighth', None), ('ninth', None), ('tenth', None)]),
      OrderedDict([('id', 5), ('first', '你'), ('second', '好'), ('third', 'comma'), ('fourth', '我'), ('fifth', '很'), ('sixth', '开心'), ('seventh', 'end'), ('eighth', None), ('ninth', None), ('tenth', None)]),
      OrderedDict([('id', 6), ('first', '你好'), ('second', 'comma'), ('third', '很'), ('fourth', '开心'), ('fifth', '认识'), ('sixth', '你'), ('seventh', 'end'), ('eighth', '单行最大长度'), ('ninth', 'end后面都忽略'), ('tenth', None)]),
      OrderedDict([('id', 7), ('first', '你们'), ('second', '好'), ('third', 'comma'), ('fourth', '大家'), ('fifth', '好'), ('sixth', 'end'), ('seventh', None), ('eighth', None), ('ninth', None), ('tenth', None)])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
    Routine block_start
    LoopInitiator sentence_loop loopType="TrialHandler"
      Selected rows = $selected_rows
      conditionsFile = $conditions_file
      loopType = sequential
      nReps = trial_repeats
      random seed = random_seed
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      conditions:
        [OrderedDict([('id', 1), ('first', '早上'), ('second', '好'), ('third', 'end'), ('fourth', None), ('fifth', None), ('sixth', None), ('seventh', None), ('eighth', None), ('ninth', None), ('tenth', None)]),
        OrderedDict([('id', 2), ('first', '晚上'), ('second', '好'), ('third', 'end'), ('fourth', None), ('fifth', None), ('sixth', None), ('seventh', None), ('eighth', None), ('ninth', None), ('tenth', None)]),
        OrderedDict([('id', 3), ('first', '大家'), ('second', '好'), ('third', 'end'), ('fourth', None), ('fifth', None), ('sixth', None), ('seventh', None), ('eighth', None), ('ninth', None), ('tenth', None)]),
        OrderedDict([('id', 4), ('first', '你们'), ('second', '好'), ('third', 'end'), ('fourth', None), ('fifth', None), ('sixth', None), ('seventh', None), ('eighth', None), ('ninth', None), ('tenth', None)]),
        OrderedDict([('id', 5), ('first', '你'), ('second', '好'), ('third', 'end'), ('fourth', None), ('fifth', None), ('sixth', None), ('seventh', None), ('eighth', None), ('ninth', None), ('tenth', None)]),
        OrderedDict([('id', 6), ('first', '你'), ('second', '好'), ('third', 'comma'), ('fourth', '很'), ('fifth', '开心'), ('sixth', '认识'), ('seventh', '你'), ('eighth', 'end'), ('ninth', None), ('tenth', None)]),
        OrderedDict([('id', 7), ('first', '你们'), ('second', '好'), ('third', 'comma'), ('fourth', '我'), ('fifth', '很'), ('sixth', '开心'), ('seventh', '认识'), ('eighth', '大家'), ('ninth', 'end'), ('tenth', None)])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
      Routine speech_corpus
      Routine black_gap
    LoopTerminator sentence_loop
    Routine block_end
  LoopTerminator block_loop
  Routine over
