PsychoPy2experiment version="2024.2.5"
Settings
  Audio latency priority = 2
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [2048, 1152]
  color = -1.0000, -1.0000, -1.0000
  expName = speech_exp
  frameRateMsg = +
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine block_start
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    CodeComponent block_start_code
      Code Type = Py
      Begin Routine:
        #打标 在第四个通道打标
        rm.set_marker(4, mode=marker_mode)
        # 将当前时间记录下来
        marker_t_s = core.monotonicClock.getTime() # s
      End Routine:
        # 保存block_start的时间
        thisExp.addData('marker_t_s', marker_t_s)
        #打标 在第1个通道打标 意味着开始播放一个回合的音频了
        # 整个读语料的过程，第1个通道始终为高
        rm.set_marker(1, mode=marker_mode)
    TextComponent start_3
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        即将开始
        3
    TextComponent start_2
      letterHeight = 0.25
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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      text:
        即将开始
        2
    TextComponent start_1
      letterHeight = 0.25
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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      text:
        即将开始
        1
  Routine block_end
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    CodeComponent block_end_code
      Code Type = Py
      Begin Routine:
        # 设置当前回合语料结束
        rm.set_marker(0, mode=marker_mode)
    TextComponent rest_5
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        结束
        休息 5s
  Routine over
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    TextComponent end_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        全部结束
        谢谢配合
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    SoundComponent sound_2
      sound [set every repeat] = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine initialization
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    CodeComponent init_device
      Code Type = Py
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      Before Experiment:
        import json
        import warnings
        import time

        from src.transmission.trans_control.dataController import DataController
        from src.peripheral.camera.MultiCamThreadRecord import (
            init_camera_thread,
            start_camera_thread,
            exit_camera_thread
        )
        from src.peripheral.audio.AudioThreadRecord import (
            init_audio_thread,
            start_audio_thread,
            exit_audio_thread
        )

        from src.utils.exit_handler import patch_core_quit, register_cleanup_function

        config_path = os.path.join('./config', 'corpus_reading_config.json')

        try:
            with open(config_path, 'r', encoding='utf-8') as f:
                config = json.load(f)
            logging.info(f"✓ Config loaded from {config_path}")
        except Exception as e:
            logging.error(f"✗ Failed to load config: {e}")
            config = {}
            warnings.warn("Using default configuration values")

        host = config.get("experiment", {}).get("host", "127.0.0.1")
        port = config.get("experiment", {}).get("port", 5001)

        big_text_size = config.get("experiment", {}).get("big_text_size", 0.25)
        small_text_size = config.get("experiment", {}).get("small_text_size", 0.25)

        trial_repeats = config.get("experiment", {}).get("trial_repetas", 1)
        block_repeats = config.get("experiment", {}).get("block_repeats", 1)

        task_type = config.get("experiment", {}).get("task_type", 1)
        task_desc = config.get("experiment", {}).get("task_desc", {"1": "语料跟读"})

        if task_type == 1:
            selected_rows = "0:25"
            task_num = 25
        else:
            print("WARNING: 任务类型只能为1.")

        conditions_file = config.get("experiment", {}).get(
            "conditions",
            r".\resources\conditions\corpus_reading\welinking_corpus_all.csv"
        )

        sound_dir = config.get("experiment", {}).get(
            "sound_dir",
            r".\resources\audios\corpus_reading"
        )

        random_seed = config.get("experiment", {}).get("random_seed", 42)

        camera_connected_status = config.get("peripheral_stats", {}).get(
            "is_camera_connected", False
        )
        audio_connected_status = config.get("peripheral_stats", {}).get(
            "is_audio_connected", False
        )

        dc = None
        try:
            dc = DataController(host, port, 4, 2000)
            dc.connect()
            dc.start()
            dc.setBufferSize(10)
            logging.info("✓ DataController initialized and started")
        except Exception as e:
            logging.error(f"✗ DataController initialization failed: {e}")
            warnings.warn(f"Could not initialize DataController: {e}")
            print(f"ERROR: {e}")

        camera_threads = None
        if camera_connected_status:
            try:
                camera_threads = init_camera_thread()
                start_camera_thread(camera_threads, mode="production")
                logging.info("✓ Camera recording started")
            except Exception as e:
                logging.error(f"✗ Camera initialization failed: {e}")
                warnings.warn(f"Could not start camera recording: {e}")

        audio_thread = None
        if audio_connected_status:
            try:
                audio_thread = init_audio_thread()
                start_audio_thread(audio_thread, mode="production")
                logging.info("✓ Audio recording started")
            except Exception as e:
                logging.error(f"✗ Audio initialization failed: {e}")
                warnings.warn(f"Could not start audio recording: {e}")

        def cleanup_all_resources():
            logging.info("=" * 50)
            logging.info("Cleaning up resources...")

            if dc:
                try:
                    dc.close_conn()
                    logging.info("✓ DataController closed")
                except Exception as e:
                    logging.error(f"✗ Error closing DataController: {e}")

            if audio_thread:
                try:
                    exit_audio_thread(audio_thread)
                    logging.info("✓ Audio recording stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping audio: {e}")

            if camera_threads:
                try:
                    exit_camera_thread(camera_threads)
                    logging.info("✓ Camera recording stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping cameras: {e}")

            logging.info("=" * 50)
            logging.info("All resources cleaned up")

        register_cleanup_function(cleanup_all_resources)
        patch_core_quit()
      Begin Routine:
        ## 摄像头和麦克风
        #start_camera_thread(cam_threads, mode='production')
        #start_audio_thread(audio_thread, mode='production')

        # 将相机启动的时间保存
        camera_t_s = core.monotonicClock.getTime() # s

        # 开始采集与获取信号
        # rm.begin_collect()
        # 开始routine时，在第8通道打标，并在routine结束时关闭打标
        event_id = 8
        rm.set_marker(event_id, mode=marker_mode)
        # 将当前时间记录下来
        marker_t_s = core.monotonicClock.getTime() # s
      End Experiment:
        cleanup_all_resources()
      End Routine:
        # 关闭打标
        rm.set_marker(0, mode=marker_mode)
        thisExp.addData('marker_t_s', marker_t_s)
        thisExp.addData('camera_t_s', camera_t_s)

        # 将参数都记录下来
        thisExp.addData('trial_repeats',trial_repeats)
        thisExp.addData('block_repeats',block_repeats)
    TextComponent init_text
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine introduction
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    SerialOutComponent intro_serialPort
      baudrate = 115200
      bytesize = 8
      getResponse = False
      parity = N
      port = $com_port
      startVal [time (s)] = 0.0
      startdata = 8
      stopVal [duration (s)] = 1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = True
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    TextComponent intro_text
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine speech_corpus
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    CodeComponent tqdm
      Code Type = Py
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      Begin Experiment:
        from tqdm import tqdm
        global trial_bar
        print("block_repeats", block_repeats)
        print("corpus_repeats", trial_repeats)

        total_trials = block_repeats * trial_repeats * corpus_num


        # 初始化进度条，描述文本将在后面动态更新
        trial_bar = tqdm(total=total_trials, desc="实验准备中...")


        print("begin exp")
      Begin Routine:
        # 1. 首先，为即将开始的这个 trial 更新进度条
        #    让进度条的数值（如 11/25 -> 12/25）先行一步
        trial_bar.update(1)

        # 2. 然后，检查这是否是一个新 block 的开始
        #    PsychoPy 会自动创建名为 block_loop 和 trials 的循环处理器
        if corpus_loop.thisN == 0:
            # 获取当前 block 的编号 (thisN 从0开始，所以+1)
            current_block = block_loop.thisN + 1
            # 获取总 block 数
            total_blocks = block_loop.nTotal

            # 构建新的描述文本
            desc_text = f"block进度：{current_block}/{total_blocks}，总进度"

            # 更新描述。这会再次刷新屏幕，但此时进度条的数值已经是正确的了
            trial_bar.set_description(desc_text)
      End Experiment:
        trial_bar.close()
    TextComponent corpus_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $wl_corpus
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    SoundComponent sound_5
      sound [set every repeat] = $'contents/audios/' + wl_corpus + '.wav'
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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Flow
  Routine initialization
  LoopInitiator block_loop loopType="TrialHandler"
    loopType = sequential
    nReps = block_repeats
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    conditions:
      [OrderedDict([('block_id', None)]),
      OrderedDict([('block_id', None)])]
    Routine block_start
    LoopInitiator corpus_loop loopType="TrialHandler"
      Selected rows = $selected_rows
      conditionsFile = $conditions_file
      loopType = random
      nReps = trial_repeats
      random seed = random_seed
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      conditions:
        [OrderedDict([('corpus_order', 1), ('wl_corpus', '你')]),
        OrderedDict([('corpus_order', 2), ('wl_corpus', '你们')]),
        OrderedDict([('corpus_order', 3), ('wl_corpus', '我')]),
        OrderedDict([('corpus_order', 4), ('wl_corpus', '我们')]),
        OrderedDict([('corpus_order', 5), ('wl_corpus', '他')]),
        OrderedDict([('corpus_order', 6), ('wl_corpus', '他们')]),
        OrderedDict([('corpus_order', 7), ('wl_corpus', '好')]),
        OrderedDict([('corpus_order', 8), ('wl_corpus', '开心')]),
        OrderedDict([('corpus_order', 9), ('wl_corpus', '认识')]),
        OrderedDict([('corpus_order', 10), ('wl_corpus', '大家')])]
      Routine speech_corpus
    LoopTerminator corpus_loop
    Routine block_end
  LoopTerminator block_loop
  Routine over
