PsychoPy2experiment version="2024.2.5"
Settings
  Audio latency priority = 1
  Experiment info = {'participant': '001', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [2048, 1152]
  color = -1.0000, -1.0000, -1.0000
  expName = webcam
  frameRateMsg = +
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine end
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    TextComponent end_text
      letterHeight = big_text_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        结束
        谢谢配合
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine block_tips
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    CodeComponent block_tip_code
      Code Type = Py
      Begin Routine:
        #打标 在第四个通道打标
        rm.set_marker(4, mode=marker_mode)
        # 将当前时间记录下来
        marker_t_s = core.monotonicClock.getTime() # s
      End Routine:
        # 拉低 并保存时间
        rm.set_marker(0, mode=marker_mode)
        thisExp.addData('marker_t_s', marker_t_s)
    TextComponent block_tips_text
      letterHeight = small_text_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $block_stimuli
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    SoundComponent block_tips_sound
      sound [set every repeat] = $block_dir
      startVal [time (s)] = 0
      stopVal [duration (s)] = 8
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  Routine tips
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    CodeComponent tip_code
      Code Type = Py
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      Begin Routine:
        #打标 在第1个通道打标
        rm.set_marker(1, mode=marker_mode)
        # 将当前时间记录下来
        marker_t_s = core.monotonicClock.getTime() # s
      End Routine:
        # 拉低 并保存时间
        rm.set_marker(0, mode=marker_mode)
        thisExp.addData('marker_tip_t_s', marker_t_s)
    TextComponent tip_text
      letterHeight = small_text_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $stimuli
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    SoundComponent tip_sound
      sound [set every repeat] = $dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine action
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    CodeComponent tqdm
      Code Type = Py
      Begin Experiment:
        from tqdm import tqdm
        global trial_bar
        print("block_repeats", block_repeats)
        print("trial_repeats", trial_repeats)

        total_trials = block_repeats * trial_repeats * task_num


        # 初始化进度条，描述文本将在后面动态更新
        trial_bar = tqdm(total=total_trials, desc="实验准备中...")


        print("begin exp")
      Begin Routine:
        #打标 在第1个通道打标
        rm.set_marker(2, mode=marker_mode)
        # 将当前时间记录下来
        marker_t_s = core.monotonicClock.getTime() # s

        # 1. 首先，为即将开始的这个 trial 更新进度条
        #    让进度条的数值（如 11/25 -> 12/25）先行一步
        trial_bar.update(1)

        # 2. 然后，检查这是否是一个新 block 的开始
        #    PsychoPy 会自动创建名为 block_loop 和 trials 的循环处理器
        if trial_loop.thisN == 0:
            # 获取当前 block 的编号 (thisN 从0开始，所以+1)
            current_block = block_loop.thisN + 1
            # 获取总 block 数
            total_blocks = block_loop.nTotal

            # 构建新的描述文本
            desc_text = f"block进度：{current_block}/{total_blocks}，总进度"

            # 更新描述。这会再次刷新屏幕，但此时进度条的数值已经是正确的了
            trial_bar.set_description(desc_text)
      End Experiment:
        trial_bar.close()
      End Routine:
        # 拉低 并保存时间
        rm.set_marker(0, mode=marker_mode)
        thisExp.addData('marker_action_t_s', marker_t_s)
    TextComponent action_text
      letterHeight = big_text_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = 开始
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    SoundComponent action_sound
      sound [set every repeat] = contents/audios/开始.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine block_end
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    TextComponent block_end_text
      letterHeight = big_text_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        回合结束
        休息5s
    SoundComponent block_end_sound
      sound [set every repeat] = contents/audios/回合结束_请休息.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine prepare
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    SoundComponent sound_5
      sound [set every repeat] = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine load_config
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = 加载中......
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import json

        # 读取配置文件
        def read_experiment_config():
            try:
                with open('config.json', 'r', encoding='utf-8') as f:
                    config = json.load(f)
                return config.get("experiment", {})
            except Exception as e:
                print(f"读取配置文件失败: {e}")
                # 返回默认配置
        #        return {
        #            "com_port": "COM7",
        #            "big_text_size": 0.3,
        #            "small_text_size": 0.2,
        #            "Num. repeats": 10,
        #            "Selected rows": "0:2",
        #            "Random seed": None,
        #            "Conditions": "condition.csv"
        #        }

        # 获取实验配置
        experiment_config = read_experiment_config()

        # 从配置中获取各项设置
        com_port = experiment_config.get("com_port", "COM7")
        big_text_size = experiment_config.get("big_text_size", 0.3)
        small_text_size = experiment_config.get("small_text_size", 0.2)
        num_repeats = experiment_config.get("num_repeats", 10)
        selected_rows = experiment_config.get("selected_rows", "0:2")
        random_seed = experiment_config.get("random_seed", None)
        conditions_file = experiment_config.get("conditions", "condition.csv")
  Routine introduction
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    TextComponent intro_text
      letterHeight = small_text_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        即将开始
    SerialOutComponent intro_serialPort
      baudrate = 115200
      bytesize = 8
      getResponse = False
      parity = N
      port = $com_port
      startVal [time (s)] = 0.0
      startdata = 8
      stopVal [duration (s)] = 1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = True
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  Routine initialization
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    CodeComponent init_device
      Code Type = Py
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      Before Experiment:
        import json
        import warnings
        import time

        from src.transmission.trans_control.dataController import DataController
        from src.peripheral.camera.MultiCamThreadRecord import (
            init_camera_thread,
            start_camera_thread,
            exit_camera_thread
        )
        from src.peripheral.audio.AudioThreadRecord import (
            init_audio_thread,
            start_audio_thread,
            exit_audio_thread
        )

        from src.utils.exit_handler import patch_core_quit, register_cleanup_function

        config_path = os.path.join('./config', 'lower_limb_movement_config.json')

        try:
            with open(config_path, 'r', encoding='utf-8') as f:
                config = json.load(f)
            logging.info(f"✓ Config loaded from {config_path}")
        except Exception as e:
            logging.error(f"✗ Failed to load config: {e}")
            config = {}
            warnings.warn("Using default configuration values")

        host = config.get("experiment", {}).get("host", "127.0.0.1")
        port = config.get("experiment", {}).get("port", 5001)

        big_text_size = config.get("experiment", {}).get("big_text_size", 0.25)
        small_text_size = config.get("experiment", {}).get("small_text_size", 0.25)

        trial_repeats = config.get("experiment", {}).get("trial_repetas", 1)
        block_repeats = config.get("experiment", {}).get("block_repeats", 1)

        task_type = config.get("experiment", {}).get("task_type", 1)
        task_desc = config.get("experiment", {}).get("task_desc", {"1": "粗大"})

        if task_type == 1:
            selected_rows = "0:3"
            task_num = 3
        else:
            print("WARNING: 任务类型只能为1.")

        conditions_file = config.get("experiment", {}).get(
            "conditions",
            r".\resources\conditions\lower_limb_movement\condition.csv"
        )
        block_conditions_file = config.get("experiment", {}).get(
            "block_conditions",
            r".\resources\conditions\lower_limb_movement\block_condition.csv"
        )
        sound_dir = config.get("experiment", {}).get(
            "sound_dir",
            r".\resources\audios\lower_limb_movement"
        )

        random_seed = config.get("experiment", {}).get("random_seed", 42)

        camera_connected_status = config.get("experiment", {}).get("peripheral_stats", {}).get(
            "is_camera_connected", False
        )
        audio_connected_status = config.get("experiment", {}).get("peripheral_stats", {}).get(
            "is_audio_connected", False
        )

        dc = None
        try:
            dc = DataController(host, port, 4, 2000)
            dc.connect()
            dc.start()
            dc.setBufferSize(10)
            logging.info("✓ DataController initialized and started")
        except Exception as e:
            logging.error(f"✗ DataController initialization failed: {e}")
            warnings.warn(f"Could not initialize DataController: {e}")
            print(f"ERROR: {e}")

        camera_threads = None
        if camera_connected_status:
            try:
                camera_threads = init_camera_thread()
                start_camera_thread(camera_threads, mode="production")
                logging.info("✓ Camera recording started")
            except Exception as e:
                logging.error(f"✗ Camera initialization failed: {e}")
                warnings.warn(f"Could not start camera recording: {e}")

        audio_thread = None
        if audio_connected_status:
            try:
                audio_thread = init_audio_thread()
                start_audio_thread(audio_thread, mode="production")
                logging.info("✓ Audio recording started")
            except Exception as e:
                logging.error(f"✗ Audio initialization failed: {e}")
                warnings.warn(f"Could not start audio recording: {e}")

        def cleanup_all_resources():
            logging.info("=" * 50)
            logging.info("Cleaning up resources...")

            if dc:
                try:
                    dc.close_conn()
                    logging.info("✓ DataController closed")
                except Exception as e:
                    logging.error(f"✗ Error closing DataController: {e}")

            if audio_thread:
                try:
                    exit_audio_thread(audio_thread)
                    logging.info("✓ Audio recording stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping audio: {e}")

            if camera_threads:
                try:
                    exit_camera_thread(camera_threads)
                    logging.info("✓ Camera recording stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping cameras: {e}")

            logging.info("=" * 50)
            logging.info("All resources cleaned up")

        register_cleanup_function(cleanup_all_resources)
        patch_core_quit()
      Begin Experiment:
        # 拿到实际帧率，用于计算光标移动速度
        fps = expInfo.get('frameRate', None)
        if fps is None:        # 个别系统测不到，就手动给 60
            fps = 60.0
        print('实测帧率 = %.2f Hz' % fps)
      Begin Routine:
        # 将相机启动的时间保存
        camera_t_s = core.monotonicClock.getTime() # s

        # 开始采集与获取信号
        # rm.begin_collect()
        # 开始routine时，在第8通道打标，并在routine结束时关闭打标
        event_id = 8
        rm.set_marker(event_id, mode=marker_mode)
        # 将当前时间记录下来
        marker_t_s = core.monotonicClock.getTime() # s
      End Experiment:
        cleanup_all_resources()
      End Routine:
        # 关闭打标
        rm.set_marker(0, mode=marker_mode)
        thisExp.addData('marker_t_s', marker_t_s)
        thisExp.addData('camera_t_s', camera_t_s)

        # 将参数都记录下来
        thisExp.addData('trial_repeats',trial_repeats)
        thisExp.addData('block_repeats',block_repeats)
    TextComponent init_text
      letterHeight = small_text_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine reset
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    CodeComponent reset_code
      Code Type = Py
      Begin Routine:
        #打标 在第1个通道打标
        rm.set_marker(3, mode=marker_mode)
        # 将当前时间记录下来
        marker_t_s = core.monotonicClock.getTime() # s
      End Routine:
        # 拉低 并保存时间
        rm.set_marker(0, mode=marker_mode)
        thisExp.addData('marker_reset_t_s', marker_t_s)
    TextComponent reset_text
      letterHeight = big_text_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 复位
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    SoundComponent reest_sound
      sound [set every repeat] = contents/audios/复位.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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Flow
  Routine initialization
  LoopInitiator block_loop loopType="TrialHandler"
    Selected rows = 0
    conditions = [OrderedDict([('block_order', 1), ('block_stimuli', '保持腿部\n伸展平放'), ('block_dir', 'contents\\audios\\请保持腿部伸展平放.wav')])]
    conditionsFile = block_condition.csv
    loopType = sequential
    nReps = block_repeats
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    Routine block_tips
    LoopInitiator trial_loop loopType="TrialHandler"
      Selected rows = $selected_rows
      conditionsFile = $conditions_file
      loopType = sequential
      nReps = trial_repeats
      random seed = random_seed
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      conditions:
        [OrderedDict([('order', 1), ('stimuli', '准备翻动手掌'), ('dir', 'contents\\audios\\准备翻动手掌.wav')]),
        OrderedDict([('order', 2), ('stimuli', '准备抓握'), ('dir', 'contents\\audios\\准备抓握.wav')]),
        OrderedDict([('order', 3), ('stimuli', '准备向内勾手腕'), ('dir', 'contents\\audios\\准备向内勾手腕.wav')]),
        OrderedDict([('order', 4), ('stimuli', '准备抬小臂'), ('dir', 'contents\\audios\\准备抬小臂.wav')])]
      Routine tips
      Routine action
      Routine reset
    LoopTerminator trial_loop
    Routine block_end
  LoopTerminator block_loop
  Routine end
