PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [2048, 1280]
  color = $[-1,-1,-1]
  expName = fiBCIDecoder
  frameRateMsg = +
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine init
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    CodeComponent init_code
      Code Type = Py
      Before Experiment:
        import json
        import warnings
        import time

        from src.transmission.trans_control.dataController import DataController
        from src.peripheral.camera.MultiCamThreadRecord import (
            init_camera_thread,
            start_camera_thread,
            exit_camera_thread
        )
        from src.peripheral.audio.AudioThreadRecord import (
            init_audio_thread,
            start_audio_thread,
            exit_audio_thread
        )

        from src.data_streamer.data_streamer import DecoderThread, StimThread
        from src.decoder.online_inference.ml_decoder.ml_decoder import load_model
        from src.welink_stimulator.stimulator_controller import (
            ChannelStimConfig,
            StimulatorController,
            StimulationParams,
        )

        from src.utils.closed_loop_runtime import (
            apply_stim_payload_to_logs,
            build_action_log_path,
            build_decode_log_row,
            drain_thread_results,
            log_decode_event,
            log_stim_payload,
            merge_new_chunk,
            monotonic_time_s,
            print_timeline,
            save_action_decode_logs,
            to_data_window,
        )
        from src.utils.exit_handler import patch_core_quit, register_cleanup_function

        config_path = os.path.join('./config', 'upper_limb_movement_config.json')

        try:
            with open(config_path, 'r', encoding='utf-8') as f:
                config = json.load(f)
            logging.info(f"✓ Config loaded from {config_path}")
        except Exception as e:
            logging.error(f"✗ Failed to load config: {e}")
            config = {}
            warnings.warn("Using default configuration values")

        with open(os.path.join("./config", "decoder_config.json"), "r", encoding="utf-8") as f:
            decoder_cfg = json.load(f)

        with open(os.path.join("./config", "feature_config.json"), "r", encoding="utf-8") as f:
            feature_cfg = json.load(f)

        model_path = os.path.join("./pretrained_models", "ml_models", "fine_decoder.pkl")
        model_bundle = load_model(model_path)
        print(f"模型加载成功，model = {model_bundle['model']}")

        host = config.get("experiment", {}).get("host", "127.0.0.1")
        port = config.get("experiment", {}).get("port", 5001)

        big_text_size = config.get("experiment", {}).get("big_text_size", 0.25)
        small_text_size = config.get("experiment", {}).get("small_text_size", 0.25)

        trial_repeats = config.get("experiment", {}).get("trial_repetas", 1)
        block_repeats = config.get("experiment", {}).get("block_repeats", 1)

        task_type = config.get("experiment", {}).get("task_type", 0)
        task_desc = config.get("experiment", {}).get("task_desc", {"0": "粗大", "1": "精细"})

        if task_type == 1:
            selected_rows = "4:7"
            task_num = 3
        else:
            selected_rows = "0:4"
            task_num = 4
            if task_type != 0:
                print("WARNING: 任务类型只能为0或1，默认为0.")

        conditions_file = config.get("experiment", {}).get(
            "conditions",
            r".\resources\conditions\upper_limb_movement\condition.csv"
        )
        block_conditions_file = config.get("experiment", {}).get(
            "block_conditions",
            r".\resources\conditions\upper_limb_movement\block_condition.csv"
        )
        sound_dir = config.get("experiment", {}).get(
            "sound_dir",
            r".\resources\audios\upper_limb_movement"
        )
        video_dir = config.get("experiment", {}).get(
            "video_dir",
            r".\resources\videos\upperlimb"
        )

        video_direction = config.get("experiment", {}).get("video_direction", "right")
        video_dir = os.path.join(video_dir, video_direction)

        random_seed = config.get("experiment", {}).get("random_seed", 42)

        camera_connected_status = config.get("experiment", {}).get("peripheral_stats", {}).get(
            "is_camera_connected", False
        )
        audio_connected_status = config.get("experiment", {}).get("peripheral_stats", {}).get(
            "is_audio_connected", False
        )

        dc = None
        try:
            dc = DataController(host, port, 4, 2000)
            dc.connect()
            dc.start()
            dc.setBufferSize(10)
            logging.info("✓ DataController initialized and started")
        except Exception as e:
            logging.error(f"✗ DataController initialization failed: {e}")
            warnings.warn(f"Could not initialize DataController: {e}")
            print(f"ERROR: {e}")

        camera_threads = None
        if camera_connected_status:
            try:
                camera_threads = init_camera_thread()
                start_camera_thread(camera_threads, mode="production")
                logging.info("✓ Camera recording started")
            except Exception as e:
                logging.error(f"✗ Camera initialization failed: {e}")
                warnings.warn(f"Could not start camera recording: {e}")

        audio_thread = None
        if audio_connected_status:
            try:
                audio_thread = init_audio_thread()
                start_audio_thread(audio_thread, mode="production")
                logging.info("✓ Audio recording started")
            except Exception as e:
                logging.error(f"✗ Audio initialization failed: {e}")
                warnings.warn(f"Could not start audio recording: {e}")

        stimulator = None
        stimulator_enabled = False
        try:
            with open(os.path.join("config", "upper_limb_movement_config.json"), "r", encoding="utf-8") as f:
                stim_cfg = json.load(f)

            stim_port = stim_cfg.get("experiment", {}).get("stim_com_port", None)

            if stim_port:
                stimulator = StimulatorController(
                    port=stim_port,
                    baudrate=115200,
                    timeout=0.1,
                    debug=True,
                )
                stimulator_enabled = stimulator.connect()
        except Exception as e:
            print(f"Stimulator init failed: {e}")
            stimulator = None
            stimulator_enabled = False

        decoder_thread = DecoderThread(
            fs=int(decoder_cfg["fs"]),
            decoder_cfg=decoder_cfg,
            feature_cfg=feature_cfg,
            model_bundle=model_bundle,
        )

        stim_thread = StimThread(
            stimulator=stimulator if stimulator_enabled else None,
        )

        def cleanup_all_resources():
            logging.info("=" * 50)
            logging.info("Cleaning up resources...")

            if dc:
                try:
                    dc.close_conn()
                    logging.info("✓ DataController closed")
                except Exception as e:
                    logging.error(f"✗ Error closing DataController: {e}")

            if audio_thread:
                try:
                    exit_audio_thread(audio_thread)
                    logging.info("✓ Audio recording stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping audio: {e}")

            if camera_threads:
                try:
                    exit_camera_thread(camera_threads)
                    logging.info("✓ Camera recording stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping cameras: {e}")

            if decoder_thread:
                try:
                    decoder_thread.decode_stop()
                    logging.info("✓ decoder_thread stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping decoder_thread: {e}")

            if stim_thread:
                try:
                    print_timeline("STIM-CLEANUP", "requesting force stop before shutdown")
                    stim_thread.stim_stop()
                    logging.info("✓ stim_thread stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping stim_thread: {e}")

            if stimulator:
                try:
                    stimulator.disconnect()
                    logging.info("✓ stimulator stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping stimulator: {e}")

            logging.info("=" * 50)
            logging.info("All resources cleaned up")

        register_cleanup_function(cleanup_all_resources)
        patch_core_quit()

        import random
        import numpy as np

        random.seed(random_seed)
        np.random.seed(random_seed)

        stim_param_map = {
            0: StimulationParams(
                channel="A",
                a=ChannelStimConfig(route=0, prescription_id=12, level=1, duration_code=1),
            ),
            1: StimulationParams(
                channel="B",
                b=ChannelStimConfig(route=0, prescription_id=2, level=1, duration_code=1),
            ),
        }

        action_decode_log_dir = os.path.join("./logs", "action_decode_logs")
        os.makedirs(action_decode_log_dir, exist_ok=True)

        action_start_time_s = 0.0
        action_end_time_s = 0.0
        action_decode_count = 0
        action_log_cache = []
        action_log_file_path = ""

        decode_interval_s = 0.1
        decode_window_s = 5.0
        stim_duration_ms = int(config.get("experiment", {}).get("stim_duration_ms", 500))
        window_points = int(decode_window_s * decoder_cfg["fs"])
        global_decode_id = 1

        stim_start_pending = False
        stim_start_decode_id = None
        stim_window_active = False
        stim_window_decode_id = None
        stim_window_row_idx = None
        stim_window_command_label = ""
        stim_window_params = None
        stim_window_deadline_s = 0.0

        stim_stop_pending = False
        stim_stop_decode_id = None
      Begin Experiment:
        # 启动两个线程
        decoder_thread.start()
        stim_thread.start()
        print("decoder_thread启动成功！")
        print("stim_thread启动成功！")
      End Experiment:
        cleanup_all_resources()
    TextComponent init_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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  Routine block_ready
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    CodeComponent br_code
      Code Type = Py
      Begin Routine:
        br_sound_dir = os.path.join(sound_dir, block_audio_name)
    TextComponent br_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $block_stimuli
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    TextComponent br_3
      letterHeight = 0.25
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent br_2
      letterHeight = 0.25
      startVal [time (s)] = 6
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent br_1
      letterHeight = 0.25
      startVal [time (s)] = 7
      stopVal [duration (s)] = 1.0
      text = 1
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    SoundComponent br_sound
      forceEndRoutine = False
      sound [set every repeat] = $br_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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  Routine trial_ready
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    CodeComponent tr_code
      Code Type = Py
      Begin Routine:
        tr_tex = stimuli
        tr_sound_dir = os.path.join(sound_dir, audio_name)

        print_timeline("ROUTINE-TRIAL_READY-BEGIN", f"text={tr_tex} | audio={audio_name}")
      End Routine:
        print_timeline("ROUTINE-TRIAL_READY-END", f"text={tr_tex}")
    TextComponent tr_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $tr_tex
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    SoundComponent tr_sound
      forceEndRoutine = False
      sound [set every repeat] = $tr_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine action
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    CodeComponent act_code
      Code Type = Py
      Begin Routine:
        act_movie_dir = os.path.join(video_dir, video_name)
        act_sound_dir = os.path.join(sound_dir, "开始.wav")
        global global_decode_id

        action_start_time_s = monotonic_time_s()
        action_end_time_s = 0.0
        action_now_s = 0.0
        action_last_fetch_s = action_start_time_s

        action_decode_count = 0
        action_log_cache = []
        action_pending_chunk_shape_by_id = {}
        action_pending_log_by_id = {}
        drain_thread_results(decoder_thread, stim_thread)

        if stimulator_enabled and stimulator is not None and getattr(stimulator, "is_stimulating", False):
            try:
                stimulator.stop_stimulation()
            except Exception as e:
                print_timeline("STIM-WARN", f"stop residual stimulation failed at action begin: {e}")

        stim_start_pending = False
        stim_start_decode_id = None
        stim_window_active = False
        stim_window_decode_id = None
        stim_window_row_idx = None
        stim_window_command_label = ""
        stim_window_params = None
        stim_window_deadline_s = 0.0

        stim_stop_pending = False
        stim_stop_decode_id = None

        fs = int(decoder_cfg["fs"])
        step_points = int(decode_interval_s * fs)
        window_points = int(decode_window_s * fs)
        expected_channels = 128

        participant_id = expInfo.get("participant", "unknown")
        session_id = expInfo.get("session", "001")
        action_log_file_path = build_action_log_path(action_decode_log_dir, participant_id, session_id)
        action_decode_window = to_data_window(dc.get_data(window_points), expected_channels)

        print_timeline(
            "ROUTINE-ACTION-BEGIN",
            (
                f"video={video_name} | init_window={tuple(action_decode_window.shape)} | "
                f"decode_interval={decode_interval_s}s | decode_window={decode_window_s}s | "
                f"stim_duration={stim_duration_ms}ms"
            ),
            action_time_s=0.0,
        )

        #
        act_movie.setMovie(act_movie_dir)
        act_sound.setSound(act_sound_dir, secs=3, hamming=True)
        act_sound.setVolume(1.0, log=False)
        act_sound.seek(0)
      Each Frame:
        action_now_s = monotonic_time_s()

        # 1. 刺激窗口结束，提交 stop
        if stim_window_active and action_now_s >= stim_window_deadline_s:
            stim_window_active = False

            start_time = stim_window_deadline_s - stim_duration_ms / 1000.0
            print_timeline(
                "STIM-WINDOW-END",
                (
                    f"id={stim_window_decode_id} | window={start_time:.3f}s-{stim_window_deadline_s:.3f}s | "
                    f"duration={stim_duration_ms}ms"
                ),
                action_time_s=action_now_s,
            )

            if (not stim_stop_pending) and stim_window_params is not None:
                stop_submit_ok = stim_thread.submit(
                    decode_id=stim_window_decode_id,
                    command_type="stop",
                    params=stim_window_params,
                    command_label=stim_window_command_label,
                )

                if stop_submit_ok:
                    stim_stop_pending = True
                    stim_stop_decode_id = stim_window_decode_id
                    print_timeline(
                        "STIM-STOP-SUBMIT",
                        f"id={stim_window_decode_id} | label={stim_window_command_label}",
                        action_time_s=action_now_s,
                    )
                else:
                    print_timeline(
                        "STIM-STOP-SKIP",
                        f"id={stim_window_decode_id} | reason=stim_thread_busy_or_queue_full",
                        action_time_s=action_now_s,
                    )

        # 2. 每100ms取一次数据，提交解码
        if (action_now_s - action_last_fetch_s) >= decode_interval_s:
            new_chunk = dc.get_data(step_points)
            current_new_chunk_shape = ""
            action_last_fetch_s = action_now_s

            action_decode_window, current_new_chunk_shape = merge_new_chunk(
                action_decode_window,
                new_chunk,
                window_points,
            )

            if (
                action_decode_window.ndim == 2
                and action_decode_window.shape[1] >= window_points
                and not decoder_thread.is_busy()
            ):
                decode_id = global_decode_id
                decode_input = action_decode_window[:, -window_points:]

                submit_ok = decoder_thread.submit(
                    decode_id=decode_id,
                    data=decode_input,
                    timestamp_s=action_now_s,
                )

                if submit_ok:
                    global_decode_id += 1
                    action_pending_chunk_shape_by_id[decode_id] = current_new_chunk_shape
                    print_timeline(
                        "DECODE-SUBMIT",
                        f"id={decode_id} | chunk={current_new_chunk_shape} | window={tuple(decode_input.shape)}",
                        action_time_s=action_now_s,
                    )

        # 3. 处理解码结果，决定是否触发刺激
        decode_payload = decoder_thread.consume_result()

        if decode_payload is not None:
            action_decode_count += 1
            decode_id = decode_payload["decode_id"]
            decode_result = decode_payload["result"]

            predicted_target = decode_result.get("predicted_target", None)
            decode_success = bool(decode_result.get("success", False))

            preprocess_time_ms = decode_payload.get("preprocess_time_ms", "")
            feature_time_ms = decode_payload.get("feature_time_ms", "")
            model_infer_time_ms = decode_payload.get("model_infer_time_ms", "")

            total_pipeline_time_ms = ""
            if (
                preprocess_time_ms is not None
                and feature_time_ms is not None
                and model_infer_time_ms is not None
            ):
                total_pipeline_time_ms = round(
                    float(preprocess_time_ms) + float(feature_time_ms) + float(model_infer_time_ms),
                    3
                )

            log_decode_event(
                decode_payload,
                decode_result,
                total_pipeline_time_ms,
                action_time_s=action_now_s,
            )

            new_chunk_shape = action_pending_chunk_shape_by_id.pop(decode_id, "")

            want_stim = decode_success and (predicted_target == 1 or predicted_target == 0)
            should_stim = int(want_stim)
            stim_submit_ok = 0
            command_label = ""
            stim_error = ""

            if want_stim:
                command_label = f"stim_target_{predicted_target}_{stim_duration_ms}ms"

                if not stimulator_enabled or stimulator is None:
                    stim_error = "stimulator_not_enabled"
                    print_timeline(
                        "STIM-START-SKIP",
                        (
                            f"id={decode_id} | target={predicted_target} | "
                            f"conf={decode_result.get('confidence', 0):.4f} | "
                            f"reason=stimulator_not_enabled"
                        ),
                        action_time_s=action_now_s,
                    )

                elif stim_start_pending:
                    stim_error = "stim_start_pending"
                    print_timeline(
                        "STIM-START-SKIP",
                        (
                            f"id={decode_id} | target={predicted_target} | "
                            f"conf={decode_result.get('confidence', 0):.4f} | "
                            f"reason=stim_start_pending"
                        ),
                        action_time_s=action_now_s,
                    )

                elif stim_window_active:
                    stim_error = "stim_is_busy"
                    print_timeline(
                        "STIM-START-SKIP",
                        (
                            f"id={decode_id} | target={predicted_target} | "
                            f"conf={decode_result.get('confidence', 0):.4f} | "
                            f"reason=stim_window_active"
                        ),
                        action_time_s=action_now_s,
                    )

                elif stim_stop_pending:
                    stim_error = "stim_stop_pending"
                    print_timeline(
                        "STIM-START-SKIP",
                        (
                            f"id={decode_id} | target={predicted_target} | "
                            f"conf={decode_result.get('confidence', 0):.4f} | "
                            f"reason=stim_stop_pending"
                        ),
                        action_time_s=action_now_s,
                    )

                elif stim_thread.is_busy():
                    stim_error = "stim_thread_busy"
                    print_timeline(
                        "STIM-START-SKIP",
                        (
                            f"id={decode_id} | target={predicted_target} | "
                            f"conf={decode_result.get('confidence', 0):.4f} | "
                            f"reason=stim_thread_busy"
                        ),
                        action_time_s=action_now_s,
                    )

                else:
                    params = stim_param_map.get(predicted_target, None)

                    if params is None:
                        stim_error = "stim_params_missing"
                        print_timeline(
                            "STIM-START-SKIP",
                            (
                                f"id={decode_id} | target={predicted_target} | "
                                f"conf={decode_result.get('confidence', 0):.4f} | "
                                f"reason=stim_params_missing"
                            ),
                            action_time_s=action_now_s,
                        )
                    else:
                        stim_submit_ok = int(
                            stim_thread.submit(
                                decode_id=decode_id,
                                command_type="start",
                                params=params,
                                command_label=command_label,
                            )
                        )

                        if stim_submit_ok:
                            stim_start_pending = True
                            stim_start_decode_id = decode_id
                            stim_window_decode_id = decode_id
                            stim_window_row_idx = None
                            stim_window_command_label = command_label
                            stim_window_params = params
                            stim_window_deadline_s = 0.0
                            stim_stop_pending = False
                            stim_stop_decode_id = None

                            print_timeline(
                                "STIM-START-SUBMIT",
                                (
                                    f"id={decode_id} | target={predicted_target} | "
                                    f"conf={decode_result.get('confidence', 0):.4f} | "
                                    f"command={command_label}"
                                ),
                                action_time_s=action_now_s,
                            )

                        else:
                            stim_error = "stim_is_busy"
                            print_timeline(
                                "STIM-START-SKIP",
                                (
                                    f"id={decode_id} | target={predicted_target} | "
                                    f"conf={decode_result.get('confidence', 0):.4f} | "
                                    f"reason=stim_thread_queue_full"
                                ),
                                action_time_s=action_now_s,
                            )

            log_row = build_decode_log_row(
                expInfo,
                action_start_time_s,
                action_now_s,
                decode_payload,
                decode_result,
                new_chunk_shape,
                total_pipeline_time_ms,
                should_stim,
                stim_submit_ok,
                command_label,
                stim_error,
            )

            action_log_cache.append(log_row)

            if stim_submit_ok:
                action_pending_log_by_id[decode_id] = len(action_log_cache) - 1
                stim_window_row_idx = len(action_log_cache) - 1

        # 4. 回填刺激线程结果
        stim_payload = stim_thread.consume_result()

        if stim_payload is not None:
            log_stim_payload(stim_payload, action_time_s=action_now_s)
            decode_id = stim_payload.get("decode_id", None)
            command_type = stim_payload.get("command_type", "")
            command_sent = bool(stim_payload.get("command_sent", 0))
            apply_stim_payload_to_logs(action_log_cache, action_pending_log_by_id, stim_payload)

            if command_type == "start" and decode_id == stim_start_decode_id:
                stim_start_pending = False
                stim_start_decode_id = None

                if command_sent:
                    stim_window_active = True
                    stim_window_deadline_s = action_now_s + stim_duration_ms / 1000.0
                    print_timeline(
                        "STIM-WINDOW-START",
                        (
                            f"id={decode_id} | actual_window={action_now_s:.3f}s-"
                            f"{stim_window_deadline_s:.3f}s | duration={stim_duration_ms}ms"
                        ),
                        action_time_s=action_now_s,
                    )
                else:
                    stim_window_active = False
                    stim_window_decode_id = None
                    stim_window_row_idx = None
                    stim_window_command_label = ""
                    stim_window_params = None
                    stim_window_deadline_s = 0.0

            if command_type == "stop" and decode_id == stim_stop_decode_id:
                stim_window_active = False
                stim_stop_pending = False
                stim_stop_decode_id = None

                stim_window_decode_id = None
                stim_window_row_idx = None
                stim_window_command_label = ""
                stim_window_params = None
                stim_window_deadline_s = 0.0
      End Routine:
        action_end_time_s = monotonic_time_s()
        print_timeline(
            "ROUTINE-ACTION-END",
            f"decodes={action_decode_count} | log_rows={len(action_log_cache)}",
            action_time_s=action_end_time_s - action_start_time_s,
        )

        if stim_window_active:
            stim_window_active = False

        if (not stim_stop_pending) and stim_window_params is not None:
            stop_submit_ok = stim_thread.submit(
                decode_id=stim_window_decode_id if stim_window_decode_id is not None else -1,
                command_type="stop",
                params=stim_window_params,
                command_label=stim_window_command_label,
            )
            if stop_submit_ok:
                stim_stop_pending = True
                stim_stop_decode_id = stim_window_decode_id
                print_timeline(
                    "STIM-STOP-FINALIZE",
                    f"id={stim_window_decode_id} | label={stim_window_command_label}",
                    action_time_s=action_end_time_s - action_start_time_s,
                )
            else:
                print_timeline(
                    "STIM-STOP-FINALIZE-SKIP",
                    f"id={stim_window_decode_id} | reason=stop_queue_full",
                    action_time_s=action_end_time_s - action_start_time_s,
                )

        if stim_stop_pending and stim_thread.is_busy() and stim_window_params is not None:
            print_timeline(
                "STIM-STOP-DRAIN-WAIT",
                f"id={stim_stop_decode_id} | waiting_for_busy_thread",
                action_time_s=action_end_time_s - action_start_time_s,
            )

        drain_deadline = time.perf_counter() + 0.8

        while time.perf_counter() < drain_deadline:
            stim_payload = stim_thread.consume_result()

            if stim_payload is None:
                core.wait(0.01)
                continue

            decode_id = stim_payload.get("decode_id", None)
            command_type = stim_payload.get("command_type", "")
            command_sent = bool(stim_payload.get("command_sent", 0))
            log_stim_payload(
                stim_payload,
                action_time_s=action_end_time_s - action_start_time_s,
            )
            apply_stim_payload_to_logs(action_log_cache, action_pending_log_by_id, stim_payload)

            if command_type == "start" and decode_id == stim_start_decode_id:
                stim_start_pending = False
                stim_start_decode_id = None
                if command_sent:
                    stim_window_active = True
                else:
                    stim_window_active = False
                    stim_window_decode_id = None
                    stim_window_row_idx = None
                    stim_window_command_label = ""
                    stim_window_params = None
                    stim_window_deadline_s = 0.0

            if command_type == "stop" and decode_id == stim_stop_decode_id:
                stim_window_active = False
                stim_stop_pending = False
                stim_stop_decode_id = None
                stim_window_decode_id = None
                stim_window_row_idx = None
                stim_window_command_label = ""
                stim_window_params = None
                stim_window_deadline_s = 0.0

        if (
            stimulator_enabled
            and stimulator is not None
            and getattr(stimulator, "is_stimulating", False)
            and stim_window_params is not None
        ):
            print_timeline(
                "STIM-STOP-FORCE",
                f"id={stim_window_decode_id} | direct_stop_after_drain",
                action_time_s=action_end_time_s - action_start_time_s,
            )
            force_stop_ok = stim_thread.force_stop_now(
                decode_id=stim_window_decode_id if stim_window_decode_id is not None else -1,
                params=stim_window_params,
                command_label=stim_window_command_label or "force_stop_after_action",
            )
            print_timeline(
                "STIM-STOP-FORCE-RESULT",
                f"id={stim_window_decode_id} | sent={int(force_stop_ok)}",
                action_time_s=action_end_time_s - action_start_time_s,
            )
            extra_stim_payload = stim_thread.consume_result()
            if extra_stim_payload is not None:
                log_stim_payload(
                    extra_stim_payload,
                    action_time_s=action_end_time_s - action_start_time_s,
                )
                apply_stim_payload_to_logs(action_log_cache, action_pending_log_by_id, extra_stim_payload)
            if force_stop_ok:
                stim_start_pending = False
                stim_start_decode_id = None
                stim_stop_pending = False
                stim_stop_decode_id = None
                stim_window_decode_id = None
                stim_window_row_idx = None
                stim_window_command_label = ""
                stim_window_params = None
                stim_window_deadline_s = 0.0

        if stim_stop_pending and stim_window_row_idx is not None:
            if 0 <= stim_window_row_idx < len(action_log_cache):
                old_error = action_log_cache[stim_window_row_idx].get("stim_error", "")
                if not old_error:
                    action_log_cache[stim_window_row_idx]["stim_error"] = "stop_result_pending_when_action_end"

        for row in action_log_cache:
            row["action_end_time_s"] = round(action_end_time_s, 6)

        try:
            save_action_decode_logs(action_log_cache, action_log_file_path)
            print_timeline(
                "ACTION-LOG-SAVED",
                f"path={action_log_file_path} | rows={len(action_log_cache)}",
                action_time_s=action_end_time_s - action_start_time_s,
            )
        except Exception as e:
            print_timeline("ACTION-LOG-ERROR", f"save_action_decode_logs failed: {e}")
    MovieComponent act_movie
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = $act_movie_dir
      size = (1.2, 0.675)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SoundComponent act_sound
      forceEndRoutine = False
      sound [set every repeat] = $act_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine trial_over
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    CodeComponent to_code
      Code Type = Py
      Begin Routine:
        to_tex = "复位"
        to_sound_dir = os.path.join(sound_dir, "复位.wav")

        #
        print_timeline("ROUTINE-TRIAL_OVER-BEGIN", f"text={to_tex}")
        to_text.setText(to_tex)
        to_sound.setSound(to_sound_dir, secs=3, hamming=True)
        to_sound.setVolume(1.0, log=False)
        to_sound.seek(0)
    TextComponent to_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $to_tex
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    SoundComponent to_sound
      forceEndRoutine = False
      sound [set every repeat] = $to_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine inter_trial_interval
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    CodeComponent iti_code
      Code Type = Py
      Begin Routine:
        import random
        iti_duration = random.randint(2, 10)
        #print(f"iti_duration: {iti_duration}")
        #
    TextComponent iti_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
      text = 随机休息
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  Routine block_over
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    CodeComponent bo_code
      Code Type = Py
      Begin Routine:
        bo_tex = "回合结束\n请休息"
        bo_sound_dir = os.path.join(sound_dir, "回合结束_请休息.wav")
    TextComponent bo_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $bo_tex
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    SoundComponent bo_sound
      forceEndRoutine = False
      sound [set every repeat] = $bo_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine finish
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    TextComponent finish_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 全部结束
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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Flow
  Routine init
  LoopInitiator block_loop loopType="TrialHandler"
    Selected rows = $selected_rows
    conditionsFile = $block_conditions_file
    loopType = random
    nReps = block_repeats
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    Routine block_ready
    LoopInitiator trial_loop loopType="TrialHandler"
      Selected rows = $selected_rows
      conditionsFile = $conditions_file
      loopType = random
      nReps = trial_repeats
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      Routine trial_ready
      Routine action
      Routine trial_over
      Routine inter_trial_interval
    LoopTerminator trial_loop
    Routine block_over
  LoopTerminator block_loop
  Routine finish
