PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'date': 'data.getDateStr()'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = uper_limb_movement_exp
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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  Routine init
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    TextComponent init_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        upper_limb_movement
        Initialization
    CodeComponent init_code
      Code Type = Py
      Before Experiment:
        # 全局初始化

        import sys
        import os
        import json
        import warnings
        from psychopy import logging, core

        project_dir = os.path.dirname(os.path.dirname(os.path.abspath(__file__)))
        if project_dir not in sys.path:
            sys.path.insert(0, project_dir)

        # 1. 导入项目模块
        from transmission.trans_manager.remoteManagerTTL import RemoteManagerTTL
        from peripheral.camera.MultiCamThreadRecord import (
            init_camera_thread,
            start_camera_thread,
            exit_camera_thread
        )
        from peripheral.audio.AudioThreadRecord import (
            init_audio_thread,
            start_audio_thread,
            exit_audio_thread
        )
        from utils.exit_handler import patch_core_quit, register_cleanup_function

        # 2. 读取配置文件
        config_path = os.path.join(project_dir, 'config', 'upper_limb_movement_config.json')

        try:
            with open(config_path, 'r', encoding='utf-8') as f:
                config = json.load(f)
            logging.info(f"✓ Config loaded from {config_path}")
        except Exception as e:
            logging.error(f"✗ Failed to load config: {e}")
            config = {}
            # 使用默认值
            warnings.warn("Using default configuration values")

        # 3. 获取配置参数
        ## 3.1 TCP 连接
        host = config.get("experiment", {}).get("host", "127.0.0.1")
        com_port = config.get("experiment", {}).get("com_port", "COM7")

        ## 3.2 文本大小
        big_text_size = config.get("experiment", {}).get("big_text_size", 0.25)
        small_text_size = config.get("experiment", {}).get("small_text_size", 0.25)

        ## 3.3 循环次数
        trial_repeats = config.get("experiment",{}).get("trial_repetas",1)
        block_repeats = config.get("experiment",{}).get("block_repeats",1)

        ## 3.4 任务类型
        task_type = config.get("experiment", {}).get("task_type", 1)
        task_desc = config.get("experiment", {}).get("task_desc", {"0": "粗大", "1": "精细"})

        if task_type==1:
            selected_rows = "4:7"
            task_num =  3
        else:
            selected_rows = "0:4"
            task_num = 4
            if task_type != 0:
                print("WARNING: 任务类型只能为0或1，默认为0.")

        ## 3.5条件文件路径
        conditions_file = config.get("experiment", {}).get(
            "conditions",
            "D:/dev/paradigm_dev/resources/conditions/upper_limb_movement/condition.csv"
        )

        block_conditions_file = config.get("experiment", {}).get(
            "block_conditions",
            "D:/dev/paradigm_dev/resources/conditions/upper_limb_movement/block_conditions.csv"
        )

        ## 3.6 随机种子
        random_seed = config.get("experiment", {}).get("random_seed", 42)

        ## 3.7 日志输出
        logging.info(f"Experiment configuration:")
        logging.info(f"  Host: {host}")
        logging.info(f"  COM port: {com_port}")
        logging.info(f"  Task type: {task_type} ({task_desc.get(str(task_type), 'unknown')})")
        logging.info(f"  Block repeats: {block_repeats}")
        logging.info(f"  Trial repeats: {trial_repeats}")

        ## 3.8 判断外设的使能情况
        ### camera
        camera_connected_status = config.get("experiment",{}).get("peripheral_stats",{}).get("is_camera_connected",False)

        ### audio
        audio_connected_status = config.get("experiment",{}).get("peripheral_stats",{}).get("is_audio_connected",False)


        # 4. 初始化 RemoteManagerTTL
        rm = None
        marker_mode = 'bit'  # 使用位模式标记
        try:
            rm = RemoteManagerTTL(
                host=host,
                com_port=com_port,
                baudrate=115200
            )
            rm.initialize_device(mode=0)
            rm.begin_collect()
            logging.info("✓ RemoteManagerTTL initialized and started")
        except Exception as e:
            logging.error(f"✗ RemoteManagerTTL initialization failed: {e}")
            warnings.warn(f"Could not initialize RemoteManager: {e}")
            print(f"ERROR: {e}")
            print("Experiment will continue without marker functionality")

        # 5. 初始化相机录制
        camera_threads = None
        if camera_connected_status:
            try:
                from peripheral.camera.MultiCamThreadRecord import Config as CameraConfig
                camera_config_file = os.path.join(project_dir, 'config', 'upper_limb_movement_config.json')
                camera_threads = init_camera_thread()
                start_camera_thread(camera_threads, mode="production")
                logging.info("✓ Camera recording started")
            except Exception as e:
                logging.error(f"✗ Camera initialization failed: {e}")
                warnings.warn(f"Could not start camera recording: {e}")

        # 6. 初始化音频录制
        audio_thread = None
        if audio_connected_status:
            try:
                audio_thread = init_audio_thread()
                start_audio_thread(audio_thread, mode="production")
                logging.info("✓ Audio recording started")
            except Exception as e:
                logging.error(f"✗ Audio initialization failed: {e}")
                warnings.warn(f"Could not start audio recording: {e}")

        # 7. 注册清理函数
        def cleanup_all_resources():
            logging.info("=" * 50)
            logging.info("Cleaning up resources...")

            # 1. 停止 RemoteManager
            if rm:
                try:
                    rm.close_connection(stop_collect=True)
                    logging.info("✓ RemoteManager closed")
                except Exception as e:
                    logging.error(f"✗ Error closing RemoteManager: {e}")

            # 2. 停止音频录制
            if audio_thread:
                try:
                    exit_audio_thread(audio_thread)
                    logging.info("✓ Audio recording stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping audio: {e}")

            # 3. 停止相机录制
            if camera_threads:
                try:
                    exit_camera_thread(camera_threads)
                    logging.info("✓ Camera recording stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping cameras: {e}")

            logging.info("=" * 50)
            logging.info("All resources cleaned up")

        ## 7.1 使用上面自定义的清理函数
        register_cleanup_function(cleanup_all_resources)

        # 8. 打补丁到 PsychoPy 的 core.quit()
        patch_core_quit()
        logging.info("✓ Cleanup handlers registered and patched")

        # 9. 设置随机种子
        import random
        import numpy as np
        random.seed(random_seed)
        np.random.seed(random_seed)
        logging.info(f"✓ Random seed set to {random_seed}")

        # 10. 全局变量初始化用于后续的Routine
        ## 10.1 block相关
        block_num = 0
        block_start_time = 0.0
        block_duration = 0.0

        ## 10.2 trial相关
        trial_num = 0
        stimulus_type = ""

        ## 10.3 trail_ready相关
        prepare_start_time = 0.0
        prepare_duration = 0.0

        # 10.4 action 相关
        action_start_time = 0.0
        action_end_time = 0.0
        action_duration = 0.0
        action_timer = None
        action_prompt = ""

        # trial_over 相关
        reset_start_time = 0.0
        reset_duration = 0.0
        reset_prompt = ""

        # block_over 相关
        rest_start_time = 0.0
        rest_duration = 0.0

        logging.info("=" * 50)
        logging.info("Upper Limb Movement Paradigm Initialized")
        logging.info(f"Task: {task_desc.get(str(task_type), 'unknown')}")
        logging.info("=" * 50)
      Begin Routine:
        init_time = core.monotonicClock.getTime()
        thisExp.addData('init_time', init_time)
  Routine block_ready
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    TextComponent block_ready_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $block_stimuli
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    SoundComponent block_sound_5
      sound [set every repeat] = $block_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # 设置block开始标记，设置marker通道为4

        if rm:
            rm.set_marker(4, mode=marker_mode)
            print(f"✓ Block {thisBlock_loop.thisN + 1} started at {core.monotonicClock.getTime():.3f}s")
            print(f"  Block stimuli: {block_stimuli}")
        else:
            print("WARNING: rm is None, marker not set")

        # 记录Block开始时间
        block_start_time = core.monotonicClock.getTime()
        thisExp.addData('block_start_time', block_start_time)
      End Routine:
        # 清除block的标记

        if rm:
            rm.set_marker(0, mode=marker_mode)
            print(f"✓ Block marker cleared at {core.monotonicClock.getTime():.3f}s")

        # 记录Block持续时间
        block_end_time = core.monotonicClock.getTime()
        block_duration = block_end_time - block_start_time
        thisExp.addData('block_duration', block_duration)
        print(f"  Block duration: {block_duration:.3f}s")
  Routine trial_ready
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    TextComponent trial_ready_text
      color = 0.2078, 0.6078, -0.6078
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $stimuli
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    SoundComponent sound_2
      sound [set every repeat] = $dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent trial_ready_code
      Code Type = Py
      Begin Routine:
        # 设置 marker 通道 1，用作提示
        rm.set_marker(1, mode=marker_mode)

        # 记录准备开始时间
        prepare_start_time = core.monotonicClock.getTime()
        thisExp.addData('prepare_start_time', prepare_start_time)
        thisExp.addData('stimulus_type', stimuli)
      End Routine:
        # 清除所有 marker
        rm.set_marker(0, mode=marker_mode)

        # 记录准备持续时间
        prepare_end_time = core.monotonicClock.getTime()
        prepare_duration = prepare_end_time - prepare_start_time
        thisExp.addData('prepare_duration', prepare_duration)
  Routine action
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    TextComponent action_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = 开始
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    SoundComponent action_sound
      sound [set every repeat] = D:/dev/paradigm_dev/resources/audios/upper_limb_movement/开始.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent tqdm
      Code Type = Py
      Begin Experiment:
        from tqdm import tqdm
        global trial_bar
        print("block_repeats", block_repeats)
        print("trial_repeats", trial_repeats)

        total_trials = block_repeats * trial_repeats * task_num


        # 初始化进度条，描述文本将在后面动态更新
        trial_bar = tqdm(total=total_trials, desc="实验准备中...")


        print("begin exp")
      Begin Routine:
        #打标 在第1个通道打标
        rm.set_marker(2, mode=marker_mode)
        # 记录动作开始时间
        marker_start_time = core.monotonicClock.getTime()
        thisExp.addData('action_start_time', marker_start_time)

        # 1. 首先，为即将开始的这个 trial 更新进度条
        #    让进度条的数值（如 11/25 -> 12/25）先行一步
        trial_bar.update(1)

        # 2. 然后，检查这是否是一个新 block 的开始
        #    PsychoPy 会自动创建名为 block_loop 和 trials 的循环处理器
        if trial_loop.thisN == 0:
            # 获取当前 block 的编号 (thisN 从0开始，所以+1)
            current_block = block_loop.thisN + 1
            # 获取总 block 数
            total_blocks = block_loop.nTotal

            # 构建新的描述文本
            desc_text = f"block进度：{current_block}/{total_blocks}，总进度"

            # 更新描述。这会再次刷新屏幕，但此时进度条的数值已经是正确的了
            trial_bar.set_description(desc_text)
      End Routine:
        rm.set_marker(0, mode=marker_mode)

        marker_end_time = core.monotonicClock.getTime()
        marker_duration = marker_end_time - marker_start_time
        thisExp.addData('marker_end_time', marker_end_time)
        thisExp.addData('marker_duration', marker_duration)
  Routine trial_over
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    TextComponent trial_over_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = 复位
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    SoundComponent trial_over_sound
      sound [set every repeat] = D:/dev/paradigm_dev/resources/audios/upper_limb_movement/复位.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent trial_over_code
      Code Type = Py
      Begin Routine:
        # 设置 marker 通道 3（复位提示）
        rm.set_marker(3, mode=marker_mode)

        # 记录复位开始时间
        reset_start_time = core.monotonicClock.getTime()
        thisExp.addData('reset_start_time', reset_start_time)
      End Routine:
        # 设置 marker 通道 0
        rm.set_marker(0, mode=marker_mode)

        # 记录复位结束时间
        reset_end_time = core.monotonicClock.getTime()
        thisExp.addData('reset_end_time', reset_end_time)
        reset_duration = reset_end_time - reset_start_time
        thisExp.addData('reset_duration', reset_duration)


        # 输出单个试次完成的信息
        print(f"    Prepare: {prepare_duration:.3f}s")
        print(f"    Action: {action_duration:.3f}s")
        print(f"    Reset: {reset_duration:.3f}s")
  Routine block_over
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    TextComponent block_end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        回合结束
        休息5秒
    SoundComponent block_end_sound
      sound [set every repeat] = D:/dev/paradigm_dev/resources/audios/upper_limb_movement/回合结束_请休息.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine finished
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        结束
        谢谢配合
    KeyboardComponent end_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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Flow
  Routine init
  LoopInitiator block_loop loopType="TrialHandler"
    Selected rows = 0
    conditions = [OrderedDict([('block_order', 1), ('block_stimuli', '保持\n张开手掌'), ('block_dir', 'resources\\audios\\upper_limb_movement\\回合开始_请保持张开手掌的姿势.wav')])]
    conditionsFile = $block_conditions_file
    loopType = sequential
    nReps = block_repeats
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    Routine block_ready
    LoopInitiator trial_loop loopType="TrialHandler"
      Selected rows = $selected_rows
      conditionsFile = $conditions_file
      loopType = sequential
      nReps = trial_repeats
      random seed = random_seed
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      conditions:
        [OrderedDict([('order', 1), ('stimuli', '准备\n翻动手掌'), ('dir', 'D:\\dev\\paradigm_dev\\resources\\audios\\upper_limb_movement\\准备翻动手掌.wav')]),
        OrderedDict([('order', 2), ('stimuli', '准备抓握'), ('dir', 'D:\\dev\\paradigm_dev\\resources\\audios\\upper_limb_movement\\准备抓握.wav')]),
        OrderedDict([('order', 3), ('stimuli', '准备向内\n勾手腕'), ('dir', 'D:\\dev\\paradigm_dev\\resources\\audios\\upper_limb_movement\\准备向内勾手腕.wav')]),
        OrderedDict([('order', 4), ('stimuli', '准备\n抬小臂'), ('dir', 'D:\\dev\\paradigm_dev\\resources\\audios\\upper_limb_movement\\准备抬小臂.wav')]),
        OrderedDict([('order', 5), ('stimuli', '准备\n动拇指'), ('dir', 'D:\\dev\\paradigm_dev\\resources\\audios\\upper_limb_movement\\准备动拇指.wav')]),
        OrderedDict([('order', 6), ('stimuli', '准备\n动食指'), ('dir', 'D:\\dev\\paradigm_dev\\resources\\audios\\upper_limb_movement\\准备动食指.wav')]),
        OrderedDict([('order', 7), ('stimuli', '准备\n动中指'), ('dir', 'D:\\dev\\paradigm_dev\\resources\\audios\\upper_limb_movement\\准备动中指.wav')])]
      Routine trial_ready
      Routine action
      Routine trial_over
    LoopTerminator trial_loop
    Routine block_over
  LoopTerminator block_loop
  Routine finished
